<?xml version="1.0"?>
<ReactionScheme>
  <Specie name="Ca" id="Ca" kdiff="100" kdiffunit="mu2/s" />
  <Specie name="CaER" id="CaER" kdiff="10." kdiffunit="mu2/s"/>
  <Specie name="RyRCaM"            id="RyRCaM"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC1"            id="RyRCaMC1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC2"            id="RyRCaMC2"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMC3"            id="RyRCaMC3"           kdiff="0" kdiffunit="mu2/s"/>  
  <Specie name="RyRCaMO1"            id="RyRCaMO1"           kdiff="0" kdiffunit="mu2/s"/>
  <Specie name="RyRCaMO2"            id="RyRCaMO2"           kdiff="0" kdiffunit="mu2/s"/>
<!-- Stochastic model for correct transitions need K=ker/kef= 0.001uM^4
     Keizer and Smith -->


 <Reaction name = "RyRCaMe" id="RyRCaMe">
    <Reactant specieID="RyRCaM"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMC1"/>
    <forwardRate>7.8125e-12</forwardRate>
    <reverseRate>0.0125</reverseRate>
 </Reaction>

  <Reaction name = "RyRCaMa" id="RyRCaMa">
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMO1"/>
    <forwardRate>2.5e-12</forwardRate>
    <reverseRate>4800e-3</reverseRate>
 </Reaction>
   

  <Reaction name = "RyRCaMb" id="RyRCaMb">
    <Reactant specieID="RyRCaMO1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>5e-14</forwardRate>
    <reverseRate>0.13</reverseRate>
  </Reaction>

   <Reaction name = "RyRCaMc" id="RyRCaMc">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMO2" />
    <forwardRate>3.3333e-16</forwardRate>
    <reverseRate>66.667e-2</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMd" id="RyRCaMd">
    <Reactant specieID="RyRCaMC1"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMC2" />
    <forwardRate>5000e-14</forwardRate>
    <reverseRate>1.248e-1</reverseRate>
  </Reaction>

  <Reaction name = "RyRCaMf" id="RyRCaMf">
    <Reactant specieID="RyRCaMC2"/>
    <Reactant specieID="Ca" power="4"/>
    <Product specieID="RyRCaMC3"/>
    <forwardRate>1.5e-15</forwardRate>
    <reverseRate>3.0</reverseRate>
 </Reaction>
      <!--Sobie et al. 2002 (Saleet Jafri's) states 4/ms, Keizer and Levine 5/ms for small ER-->
 
   <Reaction name = "RyRCaMflux1" id="RyRCaMflux1">
     <Reactant specieID="RyRCaMO1"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRCaMO1"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
    </Reaction>
  <Reaction name = "RyRCaMflux2" id="RyRCaMflux2">
     <Reactant specieID="RyRCaMO2"/>
     <Reactant specieID="CaER"/>
     <Product specieID="RyRCaMO2"/>
     <Product specieID="Ca"/>
    <forwardRate>5e-3</forwardRate>
    <reverseRate>5e-3</reverseRate>
  </Reaction>
  
</ReactionScheme>
